---
API: 2.1
OpenSesame: 3.3.14
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "DD_salience_1.8"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 17
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/ningkai/Library/CloudStorage/OneDrive-Personal/Workbench/suppr_pRF/experiments/online"
set disable_garbage_collection yes
set description "intermittent saliency patch test -  50%"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sketchpad after_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed all trials. Great job!<br /><br />Before we finish there are two more questions we would like you to answer. <br /><br />Press any key to continue..." x=0 y=0 z_index=0

define loop awareness_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run awareness_sequence

define sequence awareness_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run guess_question always
	run post_guess_response always
	run post_awareness always
	run post_awareness_response always
	run post_location always
	run post_location_response always
	run logger always

define sketchpad before_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Great Job! Its now time to start the real experiment.<br /><br />You will now do five blocks of the tasks you just<br />practiced. You will be switching between <br />the two tasks during the experiment.<br />Each block should take between five and ten <br />minutes. Between each block you are offered a break <br />which we encourage you to take so that you dont become <br />tired.<br /><br /><br />If everything is clear and you are ready to start the experiment, press any key to begin<br /><br />" x=0 y=0 z_index=0

define sketchpad before_experiment_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Also, as a warning, your experiment results will be examined <br />for guess behavior before payment is made. If you feel that you<br />do not understand the experiment or cannot do it<br />for whatever reason then feel free to withdraw from this<br />study ; there is no penalty whatsoever from withdrawing!!!<br /><br />Press any key to begin experiment" x=0 y=0 z_index=0

define inline_javascript block_counter
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare "vars.block += 1"

define feedback break_screen
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="It's time for a short break!<br /><br /><br />You have completed [block] out of 5 blocks<br /><br />Your accuracy so far: [acc]%<br />Your response time so far: [avg_rt] msec.<br /><br />Please take a break now! Rest your eyes anad make sure you feel <br />recharged before continuing.<br /><br />Press any key to continue to the next block..." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run informedConsent always
	run informed_consent always
	run init_condition always
	run vars always
	run inst always
	run inst_1 always
	run inst_2 always
	run inst_3 always
	run inst_5 always
	run practice_loop_saliency always
	run inst_6 always
	run inst_7 always
	run inst_8 always
	run inst_9 always
	run inst_10 always
	run inst_11 always
	run practice_keyboard_response1 always
	run inst_12 always
	run practice_keyboard_response2 always
	run inst_13 always
	run inst_14 always
	run inst_15 always
	run inst_16 always
	run practice_loop_search always
	run before_experiment always
	run before_experiment_2 always
	run practice_end always
	run experiment_loop always
	run after_experiment always
	run awareness_loop always
	run the_end always
	run prolific_link always
	run the_end_keypress always
	run finish_condition always

define loop experiment_loop
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence_1

define inline_javascript finish_condition
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function finishCondition() {
	    console.log('adding finished conditions')
	    vars.waiting = 1
	    jatos.batchSession.add('/finished/-', vars.condition)
	        .then(() => {
	            console.log('done')
	            vars.waiting = 0
	        })
	        .catch(() => {
	            console.log('failed to finish condition')
	            setTimeout(() => finishCondition(), 1)
	        })
	}
	
	if (window.jatos) {
	    finishCondition()
	}
	__end__
	set _prepare ""

define sketchpad guess_question
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="For these last few questions we would like to ask you to please<br />answer honestly. (There is absolutely no penalty for either answer!)<br /><br />Question 1<br />Sometimes when you needed to indicate which side had a brighter colored<br />circle, the difference was extremely small; so small that most people<br />have to guess their answer. <br /><br />Sometimes when people need to guess their answer, they prefer to press<br />one of the two buttons (so for instance you might have decided that if <br />you didnt know the answer you would just press the 'A' button). This can <br />actually cause our data to look quite strange.<br /><br />Did you find that when you didnt know the answer there was one button<br />you always pressed?<br /><br />Press the Y key on your keyboard if 'yes' and the N key if 'no'." x=0 y=-32 z_index=0

define sketchpad informedConsent
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="<b>Informed consent</b><br /><br />You are being asked to participate in a research study that is conducted by <br />Dock Duncan, MSc. and prof. dr. Jan Theeuwes,<br />Department of Experimental and Applied Psychology at Vrije Universiteit Amsterdam.<br />This first page provides some information about your participation in the study.<br /><br />If you agree to participate, you will perform a simple behavioral task<br />in which you have to identify one of several objects on the screen.<br />You will be paid £8.50 for completing the study.<br /><br />The study should take less than 60 minutes (depending on breaks).<br /><br />Your involvement in the study is voluntary, and you may choose not to participate.<br /> Your data will be anonymous. <br />There are no names or identifying information associated with the data.<br /> We do not store your IP address.<br /> If at any time you feel uncomfortable, either because of the behavioral task,<br /> the questions you are asked or for any other reason,<br /> you have the right to withdraw. There is no penalty for withdrawing.<br /><br /><br />For further information about the study you can contact Docky Duncan - d.h.duncan@vu.nl<br /><br />By pressing the 'Y' keyboard key, you agree to the above terms.<br /> If you do not agree, please close this browser tab.<br /><br /><br />Press the 'Y' keyboard key to continue...<br /><br />" x=0 y=0 z_index=0

define keyboard_response informed_consent
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y; Y"

define inline_javascript init_condition
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.condition = 0
	
	function getCondition() {
	    console.log('getting pending conditions')
	    vars.waiting = 1
	    let condition = jatos.batchSession.find('/pending/0')
	    vars.condition = jatos.batchSession.find('/pending/0')
	    if (typeof condition === "undefined") {
	        vars.experiment_finished = 1
	        vars.waiting = 0
	    } else {
	        vars.experiment_finished = 0
	        jatos.batchSession.move('/pending/0', '/started/0')
	            .then(() => {
	                console.log('starting with condition ' + condition)
	                vars.condition = condition
	                vars.waiting = 0
	            })
	            .catch(() => {
	                console.log('failed to start condition')
	                setTimeout(() => getCondition(), 1)
	                getCondition()
	            })
	    }
	}
	
	if (window.jatos) {
	    getCondition()
	} else {
	    vars.waiting = 0
	    vars.condition = 0
	}
	__end__

define sketchpad inst
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Thank you for choosing to participate in our experiment!<br /><br />In an ideal world we would have you come to the lab to complete this experiment. Alas, that is not <br />possible, but hopefully this way is a little more comfortable for you! It is still however very <br />important to us that you are able to recreate the experience of completing an experiment in the lab <br />from your own home. For this reason we ask that you make sure to follow a couple of guidelines:<br /><br /><br /><br />1) Please make sure that you are in a quiet environment without distractions. You should be focused<br />on the task you are about to do just like if you were in an empty cubicle.<br /><br />2) Please make sure the experiment is on full screen and that you are sitting about 60cm away from<br />your computer.<br /><br />3) Please pay attention during this experiment and  respond as quickly as possible. If you feel <br />yourself getting tired then we offer many brakes during the experiment, please use these to<br />recharge your batteries, it is important that you stay fresh.<br /><br /><br /><br />I hope that this doesnt sound too difficult to you! If you feel at any point that you cannot<br />complete the experiment then please do stop, its not nice to continue a task that you arent able<br />to perform and we wont be able to use your data if it is below a certain quality anyway<br /><br />In the next few slides we will explain the task you will be performing today. Please read through<br />the following instructions carefully, as going back to a previous slide is not possible!<br /><br /><br />Press any key to continue...<br /><br />" x=0 y=0 z_index=0

define sketchpad inst_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="In this experiment you will have two tasks..." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad inst_10
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="After you've found the unique shape,<br />your job will be to report the <br />direction the line inside <br />the diamond is pointing.<br />This line can be either vertical<br />or horizontal.<br /><br />" x=224 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad inst_11
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this case, the line is vertical.<br />When the line is vertical you will <br />need to press the UP arrow key on your keyboard.<br />If it was horizontal, you'd <br />press the LEFT arrow key.<br /><br />Please press the UP key now.<br />" x=256 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the 'UP' arrow key to continue..." x=0 y=320 z_index=0

define sketchpad inst_12
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diah.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcircv.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this case,<br />the line is <br />horizontal, so<br />you need to press<br />the LEFT arrow key<br />on your keyboard." x=192 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the 'LEFT' arrow key to continue..." x=0 y=320 z_index=0

define sketchpad inst_13
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="On many trials there <br />will be a shape with <br />a unique color.This is <br />a distractor which<br />you will need <br />to ignore!<br />It is there <br />to slow you down <br />:)" x=-384 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad inst_14
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=red show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="After each trial, if you are incorrect <br />the central dot will turn red. <br />" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="If you are correct, the dot will turn just remain the same" x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad inst_15
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="So in summary:<br />For the second task, <br />on every trial find the unique shape and<br />report whether it contains a vertical (UP key),<br />or horizontal (LEFT key) line.<br /><br />Also, while you are doing this then please<br /><br />KEEP YOU EYES FIXATED ON THE CENTRAL DOT<br /><br />and try to move your eyes as little as possible.<br /><br /><br />Press any key to continue..." x=0 y=0 z_index=0

define sketchpad inst_16
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Now lets practice this second task to be sure you understand it as well. <br />We will have you do about 80 practice trials of the search task now.<br />(it will take a while!)<br /><br />If the task still seems a bit unclear then dont worry, most<br />people figure it out given a little bit of practice.<br /><br /><br />Press any key to start practicing..." x=0 y=0 z_index=0

define sketchpad inst_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0
	draw circle color="[color1]" fill=1 penwidth=1 r=45.254833995939045 show_if=always x=-224 y=0 z_index=0
	draw circle color="[color2]" fill=1 penwidth=1 r=45.254833995939045 show_if=always x=224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="In the first task you will be doing, you will occasionally see<br />two shapes on the screen like the ones you see now.<br /><br />Your job will be very simple: you will need to detect which <br />shape is brighter.<br /><br />In this case it is the shape on the right." x=0 y=-160 z_index=0

define sketchpad inst_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="The shapes will only be shown for a brief moment, then they<br />will disappear, so you will need to pay attention otherwise<br />you will miss them!<br /><br />After they disappear a prompt will appear asking whether<br />you thought the color on the left or on the right was<br />brighter.<br /><br />If you think the left color was brighter, indicate this by pressing 'A'<br /><br />If you think the right color was brighter, then press 'S'<br />" x=0 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Left Brighter<br />(A)" x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Right Brighter<br />(S)" x=128 y=0 z_index=0

define sketchpad inst_5
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Lets practice a few example trials of this task to be sure you understand. <br /><br />Its usually a very easy task but sometimes the colors are very similar.<br />If it still seems a bit unclear then dont worry, most people figure it out <br />after a little bit of practice.<br /><br />The practice will last about 20 trials for you to <br />become familiar with the task.<br /><br /><br />Press any key to start practicing..." x=0 y=0 z_index=0

define sketchpad inst_6
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Thank you for completing the first training!<br /><br />We will now talk about the second task you will<br />be doing during this experiment..." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad inst_7
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The other task you will perform<br />will use an array of shapes <br /><br /><br />like the one on the screen now<br />" x=0 y=0 z_index=0

define sketchpad inst_8
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your job on each trial <br />will be to find the unique<br />shape" x=0 y=-64 z_index=0

define sketchpad inst_9
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="diav.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="Rcirch.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this case that is this<br />diamond at the top of your<br />screen." x=288 y=-320 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=96 x2=64 y1=-288 y2=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define keyboard_response key_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "up;left"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log block
	log condition
	log correct
	log count_logger
	log line_x
	log loc_dist
	log loc_tar
	log locs
	log practice
	log response
	log response_time
	log salience_scores
	log sessionid
	log test
	log trial_nr
	log response_post_location_response
	log response_post_awareness_response
	log color1
	log color2
	log hp_dist
	log hp_tar
	log participantId
	log saliency_correct
	log time_break_screen
	log salience_score1
	log salience_score2
	log response_saliency_response
	log correct_response
	log response_key_response
	log response_time_key_response
	log response_post_guess_response
	log salience_left_minus_right
	log correct_key_response
	log time_pre_stimulus_display

define sketchpad post_awareness
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Question 2<br />Did the distractor (the uniquely colored shape)<br />appear in one location<br />more often than in all other locations?<br /><br />Press the Y key on your keyboard if 'yes' and the N key if 'no'." x=0 y=-32 z_index=0

define keyboard_response post_awareness_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n;Y;N"

define keyboard_response post_guess_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n;Y;N"

define sketchpad post_location
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="circh.png" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw image center=1 file="circv.png" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="If you had to guess, in which location would<br />you say the distractors appear most often in?<br /><br />(press a numeric key on your keyboard to indicate the object's location as shown below)" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=1 x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=2 x=96 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=3 x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=4 x=96 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=5 x=0 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=6 x=-96 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=7 x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text=8 x=-96 y=-96 z_index=0

define keyboard_response post_location_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define inline_javascript practice_end
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run "vars.practice = 0"
	set _prepare ""

define keyboard_response practice_keyboard_response1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses up

define keyboard_response practice_keyboard_response2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses left

define loop practice_loop_saliency
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run practice_sequence_1

define loop practice_loop_search
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run trial_loop_practice always

define sequence practice_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback_1 always
	run trial_loop_practice_1 always

define sketchpad pre_saliency_display
	set duration 750
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="large-open" x=0 y=0 z_index=0

define sketchpad pre_stimulus_display
	set duration 750
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="large-open" x=0 y=0 z_index=0

define sketchpad prolific_link
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="If you'd like to be informed about the overall results later on,<br />or if you have a question, please send an e-mail to:<br /><br />ddn273@vu.nl<br /><br />We will next review your results to check for guess behavior, you<br />can expect to be paid within the next 24 hours.<br />Thanks for participating!<br /><br />Press the 'e' key to exit the experiment...<br />👋 👋 👋 " x=0 y=0 z_index=0

define feedback red_dot
	set reset_variables no
	set duration 400
	set description "Provides feedback to the participant"
	draw fixdot color=red show_if=always style="large-open" x=0 y=0 z_index=0

define feedback red_dot_p
	set reset_variables no
	set duration 250
	set description "Provides feedback to the participant"
	draw fixdot color=red show_if=always style="large-open" x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_javascript saliency_code
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.salience_left_minus_right < 0){
	    if (vars.response_saliency_response == 's'){vars.saliency_correct = 'true'}
	    else {vars.saliency_correct = 'false'}
	    }
	    
	if (vars.salience_left_minus_right > 0){
	    if (vars.response_saliency_response == 'a'){vars.saliency_correct = 'true'}
	    else {vars.saliency_correct = 'false'}
	    }
	
	// console.log(vars.response_saliency_response)
	__end__
	set _prepare ""

define sketchpad saliency_display
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="large-open" x=0 y=0 z_index=0
	draw circle color="[color1]" fill=1 penwidth=1 r=45.254833995939045 show_if=always x=-224 y=0 z_index=0
	draw circle color="[color2]" fill=1 penwidth=1 r=45.254833995939045 show_if=always x=224 y=0 z_index=0

define loop saliency_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run saliency_sequence

define keyboard_response saliency_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;s"

define sketchpad saliency_score
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the A or S button to give your response" x=0 y=320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="?" x=0 y=0 z_index=0

define sequence saliency_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run saliency_score always
	run saliency_response always
	run saliency_code always

define sketchpad stimulus_display
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style="large-open" x=0 y=0 z_index=0
	draw image center=1 file="[s0]" scale=0.4 show_if=always x=0 y=-224 z_index=0
	draw image center=1 file="[s1]" scale=0.4 show_if=always x=160 y=-160 z_index=0
	draw image center=1 file="[s2]" scale=0.4 show_if=always x=224 y=0 z_index=0
	draw image center=1 file="[s3]" scale=0.4 show_if=always x=160 y=160 z_index=0
	draw image center=1 file="[s4]" scale=0.4 show_if=always x=0 y=224 z_index=0
	draw image center=1 file="[s5]" scale=0.4 show_if=always x=-160 y=160 z_index=0
	draw image center=1 file="[s6]" scale=0.4 show_if=always x=-224 y=0 z_index=0
	draw image center=1 file="[s7]" scale=0.4 show_if=always x=-160 y=-160 z_index=0

define sketchpad the_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is the end; thank you so much for participating!!<br /><br />Below is a short explanation of what we wanted to investigate in this experiment:<br /><br />In this experiment we are investigating whether people percieve items as less<br />salient when they appear at locations in space in which a distractor is more<br />likely to appear in.<br /><br />Basically we know that distracting information is less distracting when it<br />appears at locations that very often contain useless, distracting information.<br /><br />Think for instance how banner ads on websites are usually pretty easy to ignore<br />once you know in advanced where they will appear.<br /><br />One theory is that visual information that originates at locations in which<br />distractors are more likely will appear 'dimmer' to the brain. In this experiment<br />we tested this theory by presenting distractors more frequently either on the right<br />or the left of the screen (randomized for each participant) while occasionally asking<br />you which location had a brighter stimuli. We expect that you will regularly rate items<br />presented where you expect distrators to appear to be less bright. We believe this will<br />be caused by the fact that your brain literally sees colors in this location as dimmer than normal.<br /><br />Thats it! Pretty boring but thats research ¯\\_(ツ)_/¯.<br /><br />Press any key to continue..." x=0 y=0 z_index=0

define keyboard_response the_end_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses e

define sketchpad training_feedback
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="👍" x=0 y=0 z_index=0

define sketchpad training_feedback_1
	set duration 600
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="You selected the wrong side!" x=0 y=0 z_index=0

define loop trial_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 144
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 loc_dist 1
	setcycle 0 loc_tar 0
	setcycle 1 loc_dist 2
	setcycle 1 loc_tar 0
	setcycle 2 loc_dist 3
	setcycle 2 loc_tar 0
	setcycle 3 loc_dist 4
	setcycle 3 loc_tar 0
	setcycle 4 loc_dist 5
	setcycle 4 loc_tar 0
	setcycle 5 loc_dist 6
	setcycle 5 loc_tar 0
	setcycle 6 loc_dist 7
	setcycle 6 loc_tar 0
	setcycle 7 loc_dist 1
	setcycle 7 loc_tar 0
	setcycle 8 loc_dist 2
	setcycle 8 loc_tar 0
	setcycle 9 loc_dist 3
	setcycle 9 loc_tar 0
	setcycle 10 loc_dist 4
	setcycle 10 loc_tar 0
	setcycle 11 loc_dist 5
	setcycle 11 loc_tar 0
	setcycle 12 loc_dist 6
	setcycle 12 loc_tar 0
	setcycle 13 loc_dist 7
	setcycle 13 loc_tar 0
	setcycle 14 loc_dist 9
	setcycle 14 loc_tar 0
	setcycle 15 loc_dist 9
	setcycle 15 loc_tar 0
	setcycle 16 loc_dist 9
	setcycle 16 loc_tar 0
	setcycle 17 loc_dist 9
	setcycle 17 loc_tar 0
	setcycle 18 loc_dist 0
	setcycle 18 loc_tar 1
	setcycle 19 loc_dist 0
	setcycle 19 loc_tar 1
	setcycle 20 loc_dist 0
	setcycle 20 loc_tar 1
	setcycle 21 loc_dist 0
	setcycle 21 loc_tar 1
	setcycle 22 loc_dist 0
	setcycle 22 loc_tar 1
	setcycle 23 loc_dist 0
	setcycle 23 loc_tar 1
	setcycle 24 loc_dist 0
	setcycle 24 loc_tar 1
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	setcycle 26 loc_dist 2
	setcycle 26 loc_tar 1
	setcycle 27 loc_dist 3
	setcycle 27 loc_tar 1
	setcycle 28 loc_dist 4
	setcycle 28 loc_tar 1
	setcycle 29 loc_dist 5
	setcycle 29 loc_tar 1
	setcycle 30 loc_dist 6
	setcycle 30 loc_tar 1
	setcycle 31 loc_dist 7
	setcycle 31 loc_tar 1
	setcycle 32 loc_dist 9
	setcycle 32 loc_tar 1
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	setcycle 36 loc_dist 0
	setcycle 36 loc_tar 2
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	setcycle 44 loc_dist 1
	setcycle 44 loc_tar 2
	setcycle 45 loc_dist 3
	setcycle 45 loc_tar 2
	setcycle 46 loc_dist 4
	setcycle 46 loc_tar 2
	setcycle 47 loc_dist 5
	setcycle 47 loc_tar 2
	setcycle 48 loc_dist 6
	setcycle 48 loc_tar 2
	setcycle 49 loc_dist 7
	setcycle 49 loc_tar 2
	setcycle 50 loc_dist 9
	setcycle 50 loc_tar 2
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	setcycle 54 loc_dist 0
	setcycle 54 loc_tar 3
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	setcycle 62 loc_dist 1
	setcycle 62 loc_tar 3
	setcycle 63 loc_dist 2
	setcycle 63 loc_tar 3
	setcycle 64 loc_dist 4
	setcycle 64 loc_tar 3
	setcycle 65 loc_dist 5
	setcycle 65 loc_tar 3
	setcycle 66 loc_dist 6
	setcycle 66 loc_tar 3
	setcycle 67 loc_dist 7
	setcycle 67 loc_tar 3
	setcycle 68 loc_dist 9
	setcycle 68 loc_tar 3
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	setcycle 72 loc_dist 0
	setcycle 72 loc_tar 4
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	setcycle 80 loc_dist 1
	setcycle 80 loc_tar 4
	setcycle 81 loc_dist 2
	setcycle 81 loc_tar 4
	setcycle 82 loc_dist 3
	setcycle 82 loc_tar 4
	setcycle 83 loc_dist 5
	setcycle 83 loc_tar 4
	setcycle 84 loc_dist 6
	setcycle 84 loc_tar 4
	setcycle 85 loc_dist 7
	setcycle 85 loc_tar 4
	setcycle 86 loc_dist 9
	setcycle 86 loc_tar 4
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	setcycle 90 loc_dist 0
	setcycle 90 loc_tar 5
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	setcycle 98 loc_dist 1
	setcycle 98 loc_tar 5
	setcycle 99 loc_dist 2
	setcycle 99 loc_tar 5
	setcycle 100 loc_dist 3
	setcycle 100 loc_tar 5
	setcycle 101 loc_dist 4
	setcycle 101 loc_tar 5
	setcycle 102 loc_dist 6
	setcycle 102 loc_tar 5
	setcycle 103 loc_dist 7
	setcycle 103 loc_tar 5
	setcycle 104 loc_dist 9
	setcycle 104 loc_tar 5
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	setcycle 113 loc_dist 0
	setcycle 113 loc_tar 6
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	setcycle 116 loc_dist 1
	setcycle 116 loc_tar 6
	setcycle 117 loc_dist 2
	setcycle 117 loc_tar 6
	setcycle 118 loc_dist 3
	setcycle 118 loc_tar 6
	setcycle 119 loc_dist 4
	setcycle 119 loc_tar 6
	setcycle 120 loc_dist 5
	setcycle 120 loc_tar 6
	setcycle 121 loc_dist 7
	setcycle 121 loc_tar 6
	setcycle 122 loc_dist 9
	setcycle 122 loc_tar 6
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	setcycle 126 loc_dist 0
	setcycle 126 loc_tar 7
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	setcycle 134 loc_dist 1
	setcycle 134 loc_tar 7
	setcycle 135 loc_dist 2
	setcycle 135 loc_tar 7
	setcycle 136 loc_dist 3
	setcycle 136 loc_tar 7
	setcycle 137 loc_dist 4
	setcycle 137 loc_tar 7
	setcycle 138 loc_dist 5
	setcycle 138 loc_tar 7
	setcycle 139 loc_dist 6
	setcycle 139 loc_tar 7
	setcycle 140 loc_dist 9
	setcycle 140 loc_tar 7
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	run trial_sequence

define loop trial_loop_practice
	set source table
	set repeat 0.5
	set order random
	set description "Repeatedly runs another item"
	set cycles 160
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 loc_dist 1
	setcycle 0 loc_tar 0
	setcycle 1 loc_dist 2
	setcycle 1 loc_tar 0
	setcycle 2 loc_dist 3
	setcycle 2 loc_tar 0
	setcycle 3 loc_dist 4
	setcycle 3 loc_tar 0
	setcycle 4 loc_dist 5
	setcycle 4 loc_tar 0
	setcycle 5 loc_dist 6
	setcycle 5 loc_tar 0
	setcycle 6 loc_dist 7
	setcycle 6 loc_tar 0
	setcycle 7 loc_dist 1
	setcycle 7 loc_tar 0
	setcycle 8 loc_dist 2
	setcycle 8 loc_tar 0
	setcycle 9 loc_dist 3
	setcycle 9 loc_tar 0
	setcycle 10 loc_dist 4
	setcycle 10 loc_tar 0
	setcycle 11 loc_dist 5
	setcycle 11 loc_tar 0
	setcycle 12 loc_dist 6
	setcycle 12 loc_tar 0
	setcycle 13 loc_dist 7
	setcycle 13 loc_tar 0
	setcycle 14 loc_dist 9
	setcycle 14 loc_tar 0
	setcycle 15 loc_dist 9
	setcycle 15 loc_tar 0
	setcycle 16 loc_dist 9
	setcycle 16 loc_tar 0
	setcycle 17 loc_dist 9
	setcycle 17 loc_tar 0
	setcycle 18 loc_dist 9
	setcycle 18 loc_tar 0
	setcycle 19 loc_dist 9
	setcycle 19 loc_tar 0
	setcycle 20 loc_dist 0
	setcycle 20 loc_tar 1
	setcycle 21 loc_dist 0
	setcycle 21 loc_tar 1
	setcycle 22 loc_dist 0
	setcycle 22 loc_tar 1
	setcycle 23 loc_dist 0
	setcycle 23 loc_tar 1
	setcycle 24 loc_dist 0
	setcycle 24 loc_tar 1
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	setcycle 28 loc_dist 2
	setcycle 28 loc_tar 1
	setcycle 29 loc_dist 3
	setcycle 29 loc_tar 1
	setcycle 30 loc_dist 4
	setcycle 30 loc_tar 1
	setcycle 31 loc_dist 5
	setcycle 31 loc_tar 1
	setcycle 32 loc_dist 6
	setcycle 32 loc_tar 1
	setcycle 33 loc_dist 7
	setcycle 33 loc_tar 1
	setcycle 34 loc_dist 9
	setcycle 34 loc_tar 1
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	setcycle 40 loc_dist 0
	setcycle 40 loc_tar 2
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	setcycle 48 loc_dist 1
	setcycle 48 loc_tar 2
	setcycle 49 loc_dist 3
	setcycle 49 loc_tar 2
	setcycle 50 loc_dist 4
	setcycle 50 loc_tar 2
	setcycle 51 loc_dist 5
	setcycle 51 loc_tar 2
	setcycle 52 loc_dist 6
	setcycle 52 loc_tar 2
	setcycle 53 loc_dist 7
	setcycle 53 loc_tar 2
	setcycle 54 loc_dist 9
	setcycle 54 loc_tar 2
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	setcycle 60 loc_dist 0
	setcycle 60 loc_tar 3
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	setcycle 68 loc_dist 1
	setcycle 68 loc_tar 3
	setcycle 69 loc_dist 2
	setcycle 69 loc_tar 3
	setcycle 70 loc_dist 4
	setcycle 70 loc_tar 3
	setcycle 71 loc_dist 5
	setcycle 71 loc_tar 3
	setcycle 72 loc_dist 6
	setcycle 72 loc_tar 3
	setcycle 73 loc_dist 7
	setcycle 73 loc_tar 3
	setcycle 74 loc_dist 9
	setcycle 74 loc_tar 3
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	setcycle 80 loc_dist 0
	setcycle 80 loc_tar 4
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	setcycle 88 loc_dist 1
	setcycle 88 loc_tar 4
	setcycle 89 loc_dist 2
	setcycle 89 loc_tar 4
	setcycle 90 loc_dist 3
	setcycle 90 loc_tar 4
	setcycle 91 loc_dist 5
	setcycle 91 loc_tar 4
	setcycle 92 loc_dist 6
	setcycle 92 loc_tar 4
	setcycle 93 loc_dist 7
	setcycle 93 loc_tar 4
	setcycle 94 loc_dist 9
	setcycle 94 loc_tar 4
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	setcycle 100 loc_dist 0
	setcycle 100 loc_tar 5
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	setcycle 108 loc_dist 1
	setcycle 108 loc_tar 5
	setcycle 109 loc_dist 2
	setcycle 109 loc_tar 5
	setcycle 110 loc_dist 3
	setcycle 110 loc_tar 5
	setcycle 111 loc_dist 4
	setcycle 111 loc_tar 5
	setcycle 112 loc_dist 6
	setcycle 112 loc_tar 5
	setcycle 113 loc_dist 7
	setcycle 113 loc_tar 5
	setcycle 114 loc_dist 9
	setcycle 114 loc_tar 5
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	setcycle 125 loc_dist 0
	setcycle 125 loc_tar 6
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	setcycle 128 loc_dist 1
	setcycle 128 loc_tar 6
	setcycle 129 loc_dist 2
	setcycle 129 loc_tar 6
	setcycle 130 loc_dist 3
	setcycle 130 loc_tar 6
	setcycle 131 loc_dist 4
	setcycle 131 loc_tar 6
	setcycle 132 loc_dist 5
	setcycle 132 loc_tar 6
	setcycle 133 loc_dist 7
	setcycle 133 loc_tar 6
	setcycle 134 loc_dist 9
	setcycle 134 loc_tar 6
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	setcycle 140 loc_dist 0
	setcycle 140 loc_tar 7
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	setcycle 148 loc_dist 1
	setcycle 148 loc_tar 7
	setcycle 149 loc_dist 2
	setcycle 149 loc_tar 7
	setcycle 150 loc_dist 3
	setcycle 150 loc_tar 7
	setcycle 151 loc_dist 4
	setcycle 151 loc_tar 7
	setcycle 152 loc_dist 5
	setcycle 152 loc_tar 7
	setcycle 153 loc_dist 6
	setcycle 153 loc_tar 7
	setcycle 154 loc_dist 9
	setcycle 154 loc_tar 7
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	run trial_sequence_p

define loop trial_loop_practice_1
	set source table
	set repeat 0.13
	set order random
	set description "Repeatedly runs another item"
	set cycles 160
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 loc_dist 1
	setcycle 0 loc_tar 0
	setcycle 1 loc_dist 2
	setcycle 1 loc_tar 0
	setcycle 2 loc_dist 3
	setcycle 2 loc_tar 0
	setcycle 3 loc_dist 4
	setcycle 3 loc_tar 0
	setcycle 4 loc_dist 5
	setcycle 4 loc_tar 0
	setcycle 5 loc_dist 6
	setcycle 5 loc_tar 0
	setcycle 6 loc_dist 7
	setcycle 6 loc_tar 0
	setcycle 7 loc_dist 1
	setcycle 7 loc_tar 0
	setcycle 8 loc_dist 2
	setcycle 8 loc_tar 0
	setcycle 9 loc_dist 3
	setcycle 9 loc_tar 0
	setcycle 10 loc_dist 4
	setcycle 10 loc_tar 0
	setcycle 11 loc_dist 5
	setcycle 11 loc_tar 0
	setcycle 12 loc_dist 6
	setcycle 12 loc_tar 0
	setcycle 13 loc_dist 7
	setcycle 13 loc_tar 0
	setcycle 14 loc_dist 9
	setcycle 14 loc_tar 0
	setcycle 15 loc_dist 9
	setcycle 15 loc_tar 0
	setcycle 16 loc_dist 9
	setcycle 16 loc_tar 0
	setcycle 17 loc_dist 9
	setcycle 17 loc_tar 0
	setcycle 18 loc_dist 9
	setcycle 18 loc_tar 0
	setcycle 19 loc_dist 9
	setcycle 19 loc_tar 0
	setcycle 20 loc_dist 0
	setcycle 20 loc_tar 1
	setcycle 21 loc_dist 0
	setcycle 21 loc_tar 1
	setcycle 22 loc_dist 0
	setcycle 22 loc_tar 1
	setcycle 23 loc_dist 0
	setcycle 23 loc_tar 1
	setcycle 24 loc_dist 0
	setcycle 24 loc_tar 1
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	setcycle 28 loc_dist 2
	setcycle 28 loc_tar 1
	setcycle 29 loc_dist 3
	setcycle 29 loc_tar 1
	setcycle 30 loc_dist 4
	setcycle 30 loc_tar 1
	setcycle 31 loc_dist 5
	setcycle 31 loc_tar 1
	setcycle 32 loc_dist 6
	setcycle 32 loc_tar 1
	setcycle 33 loc_dist 7
	setcycle 33 loc_tar 1
	setcycle 34 loc_dist 9
	setcycle 34 loc_tar 1
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	setcycle 40 loc_dist 0
	setcycle 40 loc_tar 2
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	setcycle 48 loc_dist 1
	setcycle 48 loc_tar 2
	setcycle 49 loc_dist 3
	setcycle 49 loc_tar 2
	setcycle 50 loc_dist 4
	setcycle 50 loc_tar 2
	setcycle 51 loc_dist 5
	setcycle 51 loc_tar 2
	setcycle 52 loc_dist 6
	setcycle 52 loc_tar 2
	setcycle 53 loc_dist 7
	setcycle 53 loc_tar 2
	setcycle 54 loc_dist 9
	setcycle 54 loc_tar 2
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	setcycle 60 loc_dist 0
	setcycle 60 loc_tar 3
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	setcycle 68 loc_dist 1
	setcycle 68 loc_tar 3
	setcycle 69 loc_dist 2
	setcycle 69 loc_tar 3
	setcycle 70 loc_dist 4
	setcycle 70 loc_tar 3
	setcycle 71 loc_dist 5
	setcycle 71 loc_tar 3
	setcycle 72 loc_dist 6
	setcycle 72 loc_tar 3
	setcycle 73 loc_dist 7
	setcycle 73 loc_tar 3
	setcycle 74 loc_dist 9
	setcycle 74 loc_tar 3
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	setcycle 80 loc_dist 0
	setcycle 80 loc_tar 4
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	setcycle 88 loc_dist 1
	setcycle 88 loc_tar 4
	setcycle 89 loc_dist 2
	setcycle 89 loc_tar 4
	setcycle 90 loc_dist 3
	setcycle 90 loc_tar 4
	setcycle 91 loc_dist 5
	setcycle 91 loc_tar 4
	setcycle 92 loc_dist 6
	setcycle 92 loc_tar 4
	setcycle 93 loc_dist 7
	setcycle 93 loc_tar 4
	setcycle 94 loc_dist 9
	setcycle 94 loc_tar 4
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	setcycle 100 loc_dist 0
	setcycle 100 loc_tar 5
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	setcycle 108 loc_dist 1
	setcycle 108 loc_tar 5
	setcycle 109 loc_dist 2
	setcycle 109 loc_tar 5
	setcycle 110 loc_dist 3
	setcycle 110 loc_tar 5
	setcycle 111 loc_dist 4
	setcycle 111 loc_tar 5
	setcycle 112 loc_dist 6
	setcycle 112 loc_tar 5
	setcycle 113 loc_dist 7
	setcycle 113 loc_tar 5
	setcycle 114 loc_dist 9
	setcycle 114 loc_tar 5
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	setcycle 125 loc_dist 0
	setcycle 125 loc_tar 6
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	setcycle 128 loc_dist 1
	setcycle 128 loc_tar 6
	setcycle 129 loc_dist 2
	setcycle 129 loc_tar 6
	setcycle 130 loc_dist 3
	setcycle 130 loc_tar 6
	setcycle 131 loc_dist 4
	setcycle 131 loc_tar 6
	setcycle 132 loc_dist 5
	setcycle 132 loc_tar 6
	setcycle 133 loc_dist 7
	setcycle 133 loc_tar 6
	setcycle 134 loc_dist 9
	setcycle 134 loc_tar 6
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	setcycle 140 loc_dist 0
	setcycle 140 loc_tar 7
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	setcycle 148 loc_dist 1
	setcycle 148 loc_tar 7
	setcycle 149 loc_dist 2
	setcycle 149 loc_tar 7
	setcycle 150 loc_dist 3
	setcycle 150 loc_tar 7
	setcycle 151 loc_dist 4
	setcycle 151 loc_tar 7
	setcycle 152 loc_dist 5
	setcycle 152 loc_tar 7
	setcycle 153 loc_dist 6
	setcycle 153 loc_tar 7
	setcycle 154 loc_dist 9
	setcycle 154 loc_tar 7
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	run trial_sequence_p_1

define inline_javascript trial_script
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function shuffle(array) {
		array = array.slice()
	    let counter = array.length;
		while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array
	};
	
	function getRandomInt(min, max){
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	vars.saliency_correct = ''
	vars.saliency_switch = 0
	vars.line_x = 0
	
	vars.salience_score1 = getRandomInt(70,220)
	vars.salience_score2 = 0
	while (5 > Math.abs(vars.salience_score1 - vars.salience_score2) || Math.abs(vars.salience_score1 - vars.salience_score2) > 45){vars.salience_score2 = getRandomInt(70,220)}
	
	vars.salience_left_minus_right = vars.salience_score1 - vars.salience_score2
	// console.log(vars.salience_left_minus_right)
	
	if (getRandomInt(0,1) == 1){
	    vars.color1 = vars.reds[vars.salience_score1]
	    vars.color2 = vars.reds[vars.salience_score2]}
	else{
	    vars.color1 = vars.greens[vars.salience_score1]
	    vars.color2 = vars.greens[vars.salience_score2]}
	
	vars.trial_nr += 1 ;
	
	vars.test = 0
	vars.test_token = getRandomInt(0,1) 
	if (vars.test_token == 0){vars.test = 1}
	
	vars.token = getRandomInt(0,4) 
	
	if (vars.token == 1){
	    vars.symbols = shuffle(["circh.png","circh.png","circh.png","circh.png","circv.png","circv.png","circv.png","circv.png"])}
	    
	else if (vars.token == 2){
	    vars.symbols = shuffle(["Rcirch.png","Rcirch.png","Rcirch.png","Rcirch.png","Rcircv.png","Rcircv.png","Rcircv.png","Rcircv.png"])}
	    
	else if (vars.token == 3){
	    vars.symbols = shuffle(["diah.png","diah.png","diah.png","diah.png","diav.png","diav.png","diav.png","diav.png"])}
	    
	else{
	    vars.symbols = shuffle(["Rdiah.png","Rdiah.png","Rdiah.png","Rdiah.png","Rdiav.png","Rdiav.png","Rdiav.png","Rdiav.png"])}
	
	if (vars.loc_tar==0){vars.hp_tar = 1}
	else {vars.hp_tar = 0}
	
	vars.loc_tar = vars.locs[vars.loc_tar]
	
	if (vars.symbols[vars.loc_tar] ==  "circh.png")
		{vars.symbols[vars.loc_tar] = "diah.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "circv.png")
	    {vars.symbols[vars.loc_tar] = "diav.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "Rcirch.png")
		{vars.symbols[vars.loc_tar] = "Rdiah.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "Rcircv.png")
	    {vars.symbols[vars.loc_tar] = "Rdiav.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "diah.png")
		{vars.symbols[vars.loc_tar] = "circh.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "diav.png")
	    {vars.symbols[vars.loc_tar] = "circv.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "Rdiah.png")
		{vars.symbols[vars.loc_tar] = "Rcirch.png"
		vars.correct_response = 'left'}
	else {vars.symbols[vars.loc_tar] = "Rcircv.png"
		vars.correct_response = 'up'}
	
	vars.hp_dist = 0
	if (vars.loc_dist < 9){
	    if(vars.loc_dist == 0){vars.hp_dist = 1}
	    vars.loc_dist = vars.locs[vars.loc_dist]
	    if (vars.symbols[vars.loc_dist] ==  "circh.png")
	    	{vars.symbols[vars.loc_dist] = "Rcirch.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "circv.png")
	        {vars.symbols[vars.loc_dist] = "Rcircv.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rcirch.png")
	    	{vars.symbols[vars.loc_dist] = "circh.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rcircv.png")
	        {vars.symbols[vars.loc_dist] = "circv.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "diah.png")
	    	{vars.symbols[vars.loc_dist] = "Rdiah.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "diav.png")
	        {vars.symbols[vars.loc_dist] = "Rdiav.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rdiah.png")
	    	{vars.symbols[vars.loc_dist] = "diah.png"}
	    else {vars.symbols[vars.loc_dist] = "diav.png"}
	 
	}
	 
	
	vars.s0 = vars.symbols[0];
	vars.s1 = vars.symbols[1];
	vars.s2 = vars.symbols[2];
	vars.s3 = vars.symbols[3];
	vars.s4 = vars.symbols[4];
	vars.s5 = vars.symbols[5];
	vars.s6 = vars.symbols[6];
	vars.s7 = vars.symbols[7];		
						
	vars.iti = getRandomInt(750,1000);
	vars.iti2 = getRandomInt(750,1000);
	__end__

define inline_javascript trial_script_p1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function shuffle(array) {
		array = array.slice()
	    let counter = array.length;
		while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array
	};
	
	function getRandomInt(min, max){
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	vars.saliency_correct = ''
	vars.saliency_switch = 0
	vars.line_x = 0
	
	vars.salience_score1 = getRandomInt(70,220)
	vars.salience_score2 = 0
	while (5 > Math.abs(vars.salience_score1 - vars.salience_score2) || Math.abs(vars.salience_score1 - vars.salience_score2) > 45){vars.salience_score2 = getRandomInt(70,220)}
	// vars.salience_score2 = getRandomInt(20,60)
	// vars.salience_scores = shuffle([vars.salience_score1, vars.salience_score1 + (vars.salience_score2 * (shuffle([-1,1])[0]))])
	// vars.salience_scores = shuffle([vars.salience_score1, vars.salience_score2])
	
	vars.salience_left_minus_right = vars.salience_score1 - vars.salience_score2
	// console.log(vars.salience_scores)
	console.log(vars.salience_left_minus_right)
	
	if (getRandomInt(0,1) == 1){
	    vars.color1 = vars.reds[vars.salience_score1]
	    vars.color2 = vars.reds[vars.salience_score2]}
	else{
	    vars.color1 = vars.greens[vars.salience_score1]
	    vars.color2 = vars.greens[vars.salience_score2]}
	
	vars.trial_nr += 1 ;
	
	vars.test = 1
	// vars.test_token = getRandomInt(0,3) 
	// if (vars.test_token == 0){vars.test = 1}
	
	// vars.token = getRandomInt(0,4) 
	
	// if (vars.token == 1){
	//     vars.symbols = shuffle(["circh.png","circh.png","circh.png","circh.png","circv.png","circv.png","circv.png","circv.png"])}
	    
	// else if (vars.token == 2){
	//     vars.symbols = shuffle(["Rcirch.png","Rcirch.png","Rcirch.png","Rcirch.png","Rcircv.png","Rcircv.png","Rcircv.png","Rcircv.png"])}
	    
	// else if (vars.token == 3){
	//     vars.symbols = shuffle(["diah.png","diah.png","diah.png","diah.png","diav.png","diav.png","diav.png","diav.png"])}
	    
	// else{
	//     vars.symbols = shuffle(["Rdiah.png","Rdiah.png","Rdiah.png","Rdiah.png","Rdiav.png","Rdiav.png","Rdiav.png","Rdiav.png"])}
			
	// if (vars.symbols[vars.loc_tar] ==  "circh.png")
	// 	{vars.symbols[vars.loc_tar] = "diah.png"
	// 	vars.correct_response = 'left'}
	// else if (vars.symbols[vars.loc_tar] ==  "circv.png")
	//     {vars.symbols[vars.loc_tar] = "diav.png"
	// 	vars.correct_response = 'up'}
	// else if (vars.symbols[vars.loc_tar] ==  "Rcirch.png")
	// 	{vars.symbols[vars.loc_tar] = "Rdiah.png"
	// 	vars.correct_response = 'left'}
	// else if (vars.symbols[vars.loc_tar] ==  "Rcircv.png")
	//     {vars.symbols[vars.loc_tar] = "Rdiav.png"
	// 	vars.correct_response = 'up'}
	// else if (vars.symbols[vars.loc_tar] ==  "diah.png")
	// 	{vars.symbols[vars.loc_tar] = "circh.png"
	// 	vars.correct_response = 'left'}
	// else if (vars.symbols[vars.loc_tar] ==  "diav.png")
	//     {vars.symbols[vars.loc_tar] = "circv.png"
	// 	vars.correct_response = 'up'}
	// else if (vars.symbols[vars.loc_tar] ==  "Rdiah.png")
	// 	{vars.symbols[vars.loc_tar] = "Rcirch.png"
	// 	vars.correct_response = 'left'}
	// else {vars.symbols[vars.loc_tar] = "Rcircv.png"
	// 	vars.correct_response = 'up'}
	 
	// if (vars.dist_loc < 9){
	//     if (vars.symbols[vars.dist_loc] ==  "circh.png")
	//     	{vars.symbols[vars.dist_loc] = "Rcirch.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "circv.png")
	//         {vars.symbols[vars.dist_loc] = "Rcircv.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "Rcirch.png")
	//     	{vars.symbols[vars.dist_loc] = "circh.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "Rcircv.png")
	//         {vars.symbols[vars.dist_loc] = "circv.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "diah.png")
	//     	{vars.symbols[vars.dist_loc] = "Rdiah.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "diav.png")
	//         {vars.symbols[vars.dist_loc] = "Rdiav.png"}
	//     else if (vars.symbols[vars.dist_loc] ==  "Rdiah.png")
	//     	{vars.symbols[vars.dist_loc] = "diah.png"}
	//     else {vars.symbols[vars.dist_loc] = "diav.png"}
	 
	// }
	 
	
	
	
	// vars.s0 = vars.symbols[0];
	// vars.s1 = vars.symbols[1];
	// vars.s2 = vars.symbols[2];
	// vars.s3 = vars.symbols[3];
	// vars.s4 = vars.symbols[4];
	// vars.s5 = vars.symbols[5];
	// vars.s6 = vars.symbols[6];
	// vars.s7 = vars.symbols[7];		
						
	vars.iti = getRandomInt(750,1000);
	__end__

define inline_javascript trial_script_p2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function shuffle(array) {
		array = array.slice()
	    let counter = array.length;
		while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array
	};
	
	function getRandomInt(min, max){
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	
	vars.saliency_switch = 0
	vars.line_x = 0
	
	vars.salience_score1 = getRandomInt(100,200)
	vars.salience_score2 = getRandomInt(5,50)
	vars.salience_scores = shuffle([vars.salience_score1, vars.salience_score1 + (vars.salience_score2 * (shuffle([-1,1])[0]))])
	
	if (getRandomInt(0,1) == 1){
	    vars.color1 = vars.reds[vars.salience_scores[0]]
	    vars.color2 = vars.reds[vars.salience_scores[1]]}
	else{
	    vars.color1 = vars.greens[vars.salience_scores[0]]
	    vars.color2 = vars.greens[vars.salience_scores[1]]}
	
	// vars.color1 = vars.salience_scores[0]
	// vars.color2 = vars.salience_scores[1]
	
	vars.salience_right_minus_left = vars.color1 - vars.color2
	
	vars.trial_nr += 1 ;
	
	vars.test = 0
	// vars.test_token = getRandomInt(0,3) 
	// if (vars.test_token == 0){vars.test = 1}
	
	vars.token = getRandomInt(0,4) 
	
	if (vars.token == 1){
	    vars.symbols = shuffle(["circh.png","circh.png","circh.png","circh.png","circv.png","circv.png","circv.png","circv.png"])}
	    
	else if (vars.token == 2){
	    vars.symbols = shuffle(["Rcirch.png","Rcirch.png","Rcirch.png","Rcirch.png","Rcircv.png","Rcircv.png","Rcircv.png","Rcircv.png"])}
	    
	else if (vars.token == 3){
	    vars.symbols = shuffle(["diah.png","diah.png","diah.png","diah.png","diav.png","diav.png","diav.png","diav.png"])}
	    
	else{
	    vars.symbols = shuffle(["Rdiah.png","Rdiah.png","Rdiah.png","Rdiah.png","Rdiav.png","Rdiav.png","Rdiav.png","Rdiav.png"])}
		
	if (vars.loc_tar==0){vars.hp_tar = 1}
	else{vars.hp_tar = 0}
	  
	vars.loc_tar = vars.locs[vars.loc_tar]
	
	if (vars.symbols[vars.loc_tar] ==  "circh.png")
		{vars.symbols[vars.loc_tar] = "diah.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "circv.png")
	    {vars.symbols[vars.loc_tar] = "diav.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "Rcirch.png")
		{vars.symbols[vars.loc_tar] = "Rdiah.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "Rcircv.png")
	    {vars.symbols[vars.loc_tar] = "Rdiav.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "diah.png")
		{vars.symbols[vars.loc_tar] = "circh.png"
		vars.correct_response = 'left'}
	else if (vars.symbols[vars.loc_tar] ==  "diav.png")
	    {vars.symbols[vars.loc_tar] = "circv.png"
		vars.correct_response = 'up'}
	else if (vars.symbols[vars.loc_tar] ==  "Rdiah.png")
		{vars.symbols[vars.loc_tar] = "Rcirch.png"
		vars.correct_response = 'left'}
	else {vars.symbols[vars.loc_tar] = "Rcircv.png"
		vars.correct_response = 'up'}
	 
	vars.hp_dist = 0
	if (vars.loc_dist < 9){
	    if(vars.loc_dist == 0){vars.hp_dist = 1}
	    vars.loc_dist = vars.locs[vars.loc_dist]
	    if (vars.symbols[vars.loc_dist] ==  "circh.png")
	    	{vars.symbols[vars.loc_dist] = "Rcirch.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "circv.png")
	        {vars.symbols[vars.loc_dist] = "Rcircv.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rcirch.png")
	    	{vars.symbols[vars.loc_dist] = "circh.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rcircv.png")
	        {vars.symbols[vars.loc_dist] = "circv.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "diah.png")
	    	{vars.symbols[vars.loc_dist] = "Rdiah.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "diav.png")
	        {vars.symbols[vars.loc_dist] = "Rdiav.png"}
	    else if (vars.symbols[vars.loc_dist] ==  "Rdiah.png")
	    	{vars.symbols[vars.loc_dist] = "diah.png"}
	    else {vars.symbols[vars.loc_dist] = "diav.png"}
	 
	}
	 
	
	vars.s0 = vars.symbols[0];
	vars.s1 = vars.symbols[1];
	vars.s2 = vars.symbols[2];
	vars.s3 = vars.symbols[3];
	vars.s4 = vars.symbols[4];
	vars.s5 = vars.symbols[5];
	vars.s6 = vars.symbols[6];
	vars.s7 = vars.symbols[7];		
						
	vars.iti = getRandomInt(750,1000);
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_script always
	run pre_stimulus_display always
	run stimulus_display always
	run key_response always
	run red_dot "[correct]==0"
	run pre_saliency_display "[test] == 1"
	run saliency_display "[test] == 1"
	run saliency_loop "[test]==1"
	run logger always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_counter always
	run break_screen "[block] > 0"
	run trial_loop_1 always

define sequence trial_sequence_p
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_script_p2 always
	run pre_stimulus_display always
	run stimulus_display always
	run key_response always
	run red_dot_p "[correct]==0"
	run logger always

define sequence trial_sequence_p_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_script_p1 always
	run pre_stimulus_display always
	run saliency_display always
	run saliency_loop always
	run training_feedback "[saliency_correct] == 'true'"
	run training_feedback_1 "[saliency_correct] == 'false'"
	run logger always

define inline_javascript vars
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function shuffle(array) {
		array = array.slice()
	    let counter = array.length;
		while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array
	};
	
	function getRandomInt(min, max){
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	if (window.jatos) {
	   vars.participantId = jatos.urlQueryParameters.PROLIFIC_PID;
	}
	
	vars.s0 = 0
	vars.s1 = 0
	vars.s2 = 0
	vars.s3 = 0
	vars.s4 = 0
	vars.s5 = 0
	vars.s6 = 0
	vars.s7 = 0
	
	vars.trial_nr = 0
	
	vars.practice = 1
	
	vars.block = -1
	
	vars.symbols = ['','','','','','','','']
	
	vars.line_x = ''
	
	if(vars.condition == 0){vars.condition = shuffle([2,6])[0]}
	
	if(vars.condition == 2){vars.locs = [2,0,1,3,4,5,6,7]}
	else {vars.locs = [6,0,1,2,3,4,5,7]}
	
	vars.reds = []
	vars.greens = []
	vars.hex_digits = ['0','1','2','3','4','5','6','7','8','9','A','B','C','D','E','F']
	
	for (let i = 0; i < 16; i++){
	            for (let j = 0; j < 16; j++){
	            vars.temp = vars.hex_digits[i] + vars.hex_digits[j]
	            vars.reds = vars.reds.concat('#' + vars.temp + '00' + '00')
	            vars.greens = vars.greens.concat('#' + '00' + vars.temp + '00')
	                }
	            }
	            
	
	vars.color1 = vars.greens[100]
	vars.color2 = vars.greens[150]
	__end__

