---
API: 2.1
OpenSesame: 3.3.14
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title suppr_pRF_20230619
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/dionysus/Library/CloudStorage/OneDrive-Personal/Workbench/suppr_pRF/experiments/online/osexp"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define sequence Consent_ID_Demographics
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run informed_consent always
	run informed_consent_resp always
	run age_collect always
	run sex_collect always
	run personal_info_collection always
	run waiting_to_start always

define sketchpad after_experiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed the whole experiment.<br /><br />And thanks for your effort to participate in this study!" x=0 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to quit the experiment..." x=0 y=224 z_index=0
	draw image center=1 file="good_job.jpg" scale=0.5 show_if=always x=0 y=-128 z_index=0

define form_text_input age_collect
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var answer_age
	set form_title "What is your age?"
	__form_question__
	Enter your age and press "Enter" on keyboard to continue....
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad angle_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="To get accurate reaction times, it is very important that you are looking straight<br /> at your screen. This may seem unnecessary, but it matters a lot to our research.<br /><br />Please hold up a (credit) card to your screen underneath the red dot in the middle <br />as illustrated in the image. Now adjust the angle or height of your screen so that <br />when you look at the red dot, your line of sight runs exactly along the thin side <br />of the credit-card.<br /><br />Please try to maintain this position during the entire experiment. To be sure, you <br />will be asked to repeat this procedure a few times during the experiment. Ideally, <br />you rest your head on something (e.g. book) so that you are sure it doesn’t move." x=0 y=-192 z_index=0
	draw image center=1 file="Visual_angles.JPG" scale=0.7 show_if=always x=0 y=192 z_index=0
	draw fixdot color="#fc0107" show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press 'Spacebar' to continue --" x=0 y=-32 z_index=0

define loop awareness
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run awareness_block

define sequence awareness_block
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_parameters always
	run reset_feedback always
	run awn_question_prep always
	run awn_questionary_0 always
	run awn_questionary_1 always
	run logger always

define feedback awn_feedback_correct
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Great! You found this regularity!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="-- Press 'Spacebar' to continue... --" x=0 y=236 z_index=0

define feedback awn_feedback_incorrect
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Oops... Not this one. <br />That's normal and common, so no worry about it." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="-- Press 'Spacebar' to continue... --" x=0 y=236 z_index=0

define sketchpad awn_instruction_0
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="-- Press 'Spacebar' to continue... --" x=0 y=236 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Here we can tell you that there are indeed some regularities <br />in this experiment: the distractor appears more times on one location!" x=-32 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Here is an interesting fact: even you don't know the <br />regularity itself, sometimes you can still identify it.<br />The unawareness regularity can benifit to your response time and <br />accuracy in the task.<br />" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=96 z_index=0

define sketchpad awn_instruction_1
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="You will see a circle at one of these locations. Your <br />current task is to guess which location is the high <br />probability location in this task, and then press the <br />corresponding number key (1 - 4) on your keyboard." x=-32 y=-288 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text=1 x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text=2 x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text=3 x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text=4 x="[loc_3_x]" y="[loc_3_y]" z_index=0

define keyboard_response awn_kb
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[corr_resp]"
	set allowed_responses "1;2;3;4"

define sketchpad awn_question_prep
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="Well done! <br /><br />The following is the last few questionaries of this experiment,<br /><br />It will take you 2 minutes to answer.<br /><br /><br />-- Press any key to continue.. --" x=0 y=32 z_index=0

define form_multiple_choice awn_questionary_0
	set timeout infinite
	set spacing 10
	set question "1. Did you find any regularity in this experiment?"
	__options__
	Yes, I know very clearly about the regularity that emerged from this experiment.
	Yes, I'm sure there is some regularity but I can't describe it specifically.
	No, I didn't find any regularity in this experiment.
	No, I'm definitely sure that the sequence pattern is totally random.
	Maybe there is regularity, maybe not. I'm not sure.
	__end__
	set margins "50;50;50;50"
	set form_var answer_any_regularity
	set form_title any_regularity
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_text_input awn_questionary_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var answer_describe_regularity
	set form_title describe_regularity
	set form_question "If you found some regularity, can you briefly describe what you found? And then press 'enter' to continue."
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop block_loop
	set source table
	set skip 0
	set repeat 999
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 1
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[ind_trial]==[nr_trials]"
	setcycle 0 empty_column ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run set_block always
	run new_block always
	run block_loop always
	run repeat_decision always
	run feedback "[repeat_practice] == 0"
	run feedback_notgood "[repeat_practice] == 1"
	run feedback_confirm always
	run repeat_practice always

define inline_javascript const
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	function getRandomInt(min, max) {
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	function sample(array) {
	    var randomElement = array[Math.floor(Math.random() * array.length)];
	    return randomElement;
	}
	
	// Session setting
	// 12 + 6*144
	vars.nr_block = 6; //6
	vars.nr_trials_practice = 12; // Integer multiple of 12
	vars.nr_trials_formal = 144; // Integer multiple of 48 ->144
	
	// Stimuli
	vars.dur_fix_range = [650, 1000];
	vars.dur_ph = 250;
	vars.dur_disp = 200;
	vars.dur_resp = 1000;
	vars.distance = 72; // Distance from fixation
	vars.circle_radius = 45;
	vars.gabor_size = 100;
	vars.locations = [[-vars.distance, -vars.distance], [vars.distance, -vars.distance], [vars.distance, vars.distance], [-vars.distance, vars.distance]];
	vars.loc_0_x = vars.locations[0][0];
	vars.loc_0_y = vars.locations[0][1];
	vars.loc_1_x = vars.locations[1][0];
	vars.loc_1_y = vars.locations[1][1];
	vars.loc_2_x = vars.locations[2][0];
	vars.loc_2_y = vars.locations[2][1];
	vars.loc_3_x = vars.locations[3][0];
	vars.loc_3_y = vars.locations[3][1];
	// Initiate the parameter
	vars.ind_block = -1;
	
	// Initiate the HPL
	var potential_HPLs = [0, 1, 2, 3];
	vars.HPL1 = sample(potential_HPLs);
	const index = potential_HPLs.indexOf(vars.HPL1);
	console.log("The HPL1 is " + vars.HPL1);
	if (index > -1) { // only splice array when item is found
	  potential_HPLs.splice(index, 1); // 2nd parameter means remove one item only
	}
	vars.HPL2 = sample(potential_HPLs);
	console.log("The HPL2 is " + vars.HPL2);
	
	vars.TD_pattern = []; // Target/Distractor pairs in a list.
	for (var i = 0; i < 3; i++) {
	    for (var j = i+1; j < 4; j++)
	        vars.TD_pattern.push([i, j]);
	}
	for (var i = 3; i > 0; i--) {
	    for (var j = i-1; j > -1; j--)
	        vars.TD_pattern.push([i, j]);
	}
	
	
	// Awearness
	vars.response_awn_kb = 'None';
	vars.answer_any_regularity = 'None';
	vars.answer_describe_regularity = 'None';
	vars.correct_awn_kb = 'None';
	__end__

define repeat_cycle continue
	set description "Optionally repeat a cycle from a loop"
	set condition "[waiting] = 1"

define sketchpad display_wait
	set start_response_interval no
	set reset_variables no
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Please wait …" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run sona_setup always
	run init_condition always
	run const always
	run new_sketchpad always
	run Consent_ID_Demographics always
	run instruction always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run finish_condition always
	run awareness always
	run after_experiment always

define loop experimental_loop
	set source table
	set skip 0
	set repeat 999
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if "[ind_block]==[nr_block]-1"
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br />[well_done_message]<br /><br />Press 'Spacebar' to continue" x=0 y=0 z_index=0

define keyboard_response feedback_confirm
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define feedback feedback_notgood
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%, which is a bit low.<br />We can only go to the formal experiment once your accuracy is higher than 80%.<br /><br />Please try the practice one more time :)<br /><br />Press 'Spacebar' to continue" x=0 y=0 z_index=0

define inline_javascript feedback_script
	set description "Executes JavaScript code"
	___run__
	vars.display_time = vars.time_resp-vars.time_stim_board;
	vars.RT = vars.response_time_kb+vars.display_time;
	vars.sum_rt = vars.sum_rt+vars.RT;
	
	if (vars.correct_kb===1){
	    vars.feedback_fixation = 'Y_fixation.png';
	} else {
	    vars.feedback_fixation = 'X_fixation.png';
	}
	__end__
	set _prepare ""

define inline_javascript finish_condition
	set description "Executes JavaScript code"
	___run__
	// function finishCondition() {
	//     console.log('adding finished conditions')
	//     vars.waiting = 1
	//     jatos.batchSession.add('/finished/-', vars.condition)
	//         .then(() => {
	//             console.log('done')
	//             vars.waiting = 0
	//         })
	//         .catch(() => {
	//             console.log('failed to finish condition')
	//             setTimeout(() => finishCondition(), 1)
	//         })
	// }
	
	// if (window.jatos) {
	//     finishCondition()
	// }
	__end__
	set _prepare ""

define sketchpad fixation
	set start_response_interval no
	set duration "[dur_fix]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define feedback fixation_feedback
	set reset_variables no
	set duration 100
	set description "Provides feedback to the participant"
	draw image center=1 file="[feedback_fixation]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad informed_consent
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="<b>Informed consent</b><br /><br />Executive researchers:  Ningkai Wang; Dirk van Moorselaar; Tomas Knapen; Jan Theeuwes<br />" x=-2 y=-266 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="If you sign this informed consent, you agree:<br />a) to fill out two questions regarding your age and gender<br />b) to perform a simple task: you will respond to the color of the circle; <br />   (60 minutes in total)<br />c) to fill out a short questionnaire after you have finished the experiment <br />d) to complete these tasks individually and seriously, working online <br />from home in a quiet place on your laptop or PC" x=-378 y=-226 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Further points of attention:<br />1. There are no risks associated with participation in this study.<br />2. Participation is voluntary. You are entitled to withdraw <br />from participation at any moment without giving reasons.<br />3. You will receive a random number that is coupled to your <br />questionnaires and online tests. Only the researchers mentioned above will <br />have the key in which your random number is coupled to your personal data.<br />4. These data are stored separately from the other data obtained in this study. <br />5. Your IP address is not stored.<br />6. Your data will be processed confidentially and shared with others <br />only in anonymized form. Your personal data will never be passed on to others.<br />7. Data obtained in this study will be stored up to 10 years after completion." x=-380 y=-6 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="For further information about the study, please contact Ningkai Wang (n.wang@vu.nl).<br /><br />Press the 'Y' keyboard key to continue...<br /><br />" x=-2 y=304 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="In return, you will receive money for compensation after you have completed all tasks. " x=12 y=-32 z_index=0

define keyboard_response informed_consent_resp
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y; Y"

define inline_javascript init_condition
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// vars.condition = 0;
	
	// function getCondition() {
	//     console.log('getting pending conditions');
	//     vars.waiting = 1;
	//     let condition = jatos.batchSession.find('/pending/0');
	//     vars.condition = jatos.batchSession.find('/pending/0');
	//     if (typeof condition === "undefined") {
	//         vars.experiment_finished = 1;
	//         vars.waiting = 0;
	//     } else {
	//         vars.experiment_finished = 0;
	//         jatos.batchSession.move('/pending/0', '/started/0')
	//             .then(() => {
	//                 console.log('starting with condition ' + condition);
	//                 vars.condition = condition;
	//                 vars.waiting = 0;
	//             })
	//             .catch(() => {
	//                 console.log('failed to start condition');
	//                 setTimeout(() => getCondition(), 1);
	//                 getCondition();
	//             })
	//     }
	// }
	
	// if (window.jatos) {
	//     getCondition();
	// } else {
	//     vars.waiting = 0;
	//     vars.condition = 0;
	// }
	__end__

define sequence instruction
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run angle_instruction "[debug_mode] == 0"
	run thank_you_message "[debug_mode] == 0"
	run instruction_loop "[debug_mode] == 0"

define sketchpad instruction_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="1. During the whole experiment, you <br />will see a fixation dot like this:" x=0 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press any key to continue --" x=0 y=288 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Please keep your eyes fixated at the <br />central fixation dot during the experiment, <br />and try to not move your eyes." x=0 y=160 z_index=0

define sketchpad instruction_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="2. During the experiment, you will<br />see two Gabors in one trial:" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press 'left' to continue --" x=0 y=288 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=90 phase=0 show_if=always size="[gabor_size]" stdev=18 x=-72 y=72 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=135 phase=0 show_if=always size="[gabor_size]" stdev=18 x=72 y=-72 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0

define sketchpad instruction_2_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="2. During the experiment, you will<br />see two Gabors in one trial:" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press 'left' to continue --" x=0 y=288 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=90 phase=0 show_if=always size="[gabor_size]" stdev=18 x=-72 y=72 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=135 phase=0 show_if=always size="[gabor_size]" stdev=18 x=72 y=-72 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=224 x2=160 y1=-64 y2=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This will be your <br />target! You need to <br />respond to its angle<br />(left or right)." x=352 y=-64 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=-224 x2=-160 y1=96 y2=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This will be <br />a distractor!" x=-320 y=96 z_index=0

define sketchpad instruction_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="3. Your task:<br /><br />You need to respond to the tilted gabor and ignore the vertical/horizontal Gabors.<br />Press the left or right key as soon as possible when you see the angle of a <br />tilted Gabor.<br /><br />If your response is correct, the fixdot will turn into green as a feedback.<br />If your response is incorrect, the fixdot will turn into red." x=0 y=-128 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=0 phase=0 show_if=always size="[gabor_size]" stdev=18 x=-200 y=30 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=90 phase=0 show_if=always size="[gabor_size]" stdev=18 x=-200 y=130 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=135 phase=0 show_if=always size="[gabor_size]" stdev=18 x=200 y=30 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=45 phase=0 show_if=always size="[gabor_size]" stdev=18 x=200 y=130 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=-200 x2=-200 y1=256 y2=192 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=200 x2=200 y1=256 y2=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Vertical/horizontal Gabors" x=-200 y=288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Tilted Gabors (your target!)" x=200 y=288 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.25 arrow_head_width=24 color=white fill=1 penwidth=1 show_if=always x1=352 x2=288 y1=32 y2=32 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.25 arrow_head_width=24 color=white fill=1 penwidth=1 show_if=always x1=352 x2=288 y1=128 y2=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="press <br />'left'!" x=416 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="press <br />'right'!" x=416 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press any key to continue --" x=0 y=320 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x=-200 y=30 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x=-200 y=130 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x=200 y=30 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x=200 y=130 z_index=0

define sketchpad instruction_4
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="4. For example, if you see a trial like this, <br />you should press 'right' on your keyboard:" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="-- Press 'right' to continue --" x=0 y=288 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=90 phase=0 show_if=always size="[gabor_size]" stdev=18 x=-72 y=72 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient=45 phase=0 show_if=always size="[gabor_size]" stdev=18 x=72 y=-72 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=224 x2=160 y1=32 y2=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=17 html=yes show_if=always text="Because this gabor is <br />tilted to the right!" x=256 y=64 z_index=0

define loop instruction_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define keyboard_response kb
	set timeout "[dur_resp]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response_kb]"
	set allowed_responses "left;right"

define keyboard_response kb_instruction_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses left

define keyboard_response kb_instruction_2_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses left

define keyboard_response kb_instruction_4
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses right

define keyboard_response kb_start_practice
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;r"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log sub_id
	log answer_age
	log answer_sex
	log HPL
	log period
	log ind_block
	log ind_trial
	log response_kb
	log display_time
	log response_time_kb
	log RT
	log correct_kb
	log correct_awn_kb
	log dur_fix
	log loc_target
	log loc_distractor
	log ori_t
	log ori_d
	log answer_any_regularity
	log answer_describe_regularity
	log phase

define sketchpad new_block
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This is [block_display]<br /><br />Before you start you can take a break for 1-2 minutes.<br /><br /><br /><br /><br />When you are prepared, press any key to start!" x=0 y=0 z_index=0

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction_1 always
	run instruction_2 always
	run kb_instruction_2 always
	run instruction_2_1 always
	run kb_instruction_2_1 always
	run instruction_3 always
	run instruction_4 always
	run kb_instruction_4 always
	run start_practice always
	run kb_start_practice always
	run repeat_instruction always

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will finish a visual search task with keyboard responses in this experiment.<br />Your task is to choose a tilted Gabor from two Gabors and respond to its angle.<br /><br /><br />Please press any key to read the informed consent." x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Wellcome to my experiment!" x=0 y=-96 z_index=0

define inline_javascript personal_info_collection
	set description "Executes JavaScript code"
	___run__
	console.log('sex = ' + vars.answer_sex);
	console.log('age = ' + vars.answer_age);
	if (vars.answer_age === 'admin'){
	    vars.debug_mode = 1;
	    console.log('ADMINISTRATOR MODE: ON (=｀ω´=)');
	    console.log('    /\\_/\\           ___\n   = o_o =_______    \\ \\ \n    __^      __(  \.__) )\n(@)<_____>__(_____)____/')
	}
	__end__
	set _prepare ""

define sketchpad placeholder
	set duration "[dur_ph]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define inline_javascript repeat_decision
	set description "Executes JavaScript code"
	___run__
	vars.repeat_practice = 0;
	if (vars.acc<80 & vars.practice==='yes'){
	    vars.repeat_practice = 1;
	}
	
	if (vars.acc==100){
	    vars.well_done_message = "PERFECT! You are doing a great job!";
	} else if (vars.acc<100 && vars.acc>=95){
	    vars.well_done_message = "Well done! This is almost perfect.";
	} else if (vars.acc<95 && vars.acc>=90){
	    vars.well_done_message = "Good! Keep it up.";
	} else if (vars.acc<90 && vars.acc>=80){
	    vars.well_done_message = "Keep going! I think you can do better.";
	} else {
	    vars.well_done_message = "Emmm, This score is a bit low. Is there anything wrong?";
	}
	
	vars.avg_rt = Math.floor(vars.sum_rt/vars.nr_trials);
	__end__
	set _prepare ""

define repeat_cycle repeat_instruction
	set description "Optionally repeat a cycle from a loop"
	set condition "[response_kb_start_practice]=='r'"

define repeat_cycle repeat_practice
	set description "Optionally repeat a cycle from a loop"
	set condition "[repeat_practice] == 1"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad resp
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_javascript set_block
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	// Basic custom functions
	function nestedCopy(array) {
	    return JSON.parse(JSON.stringify(array));
	}
	
	function repeat(array, num) {
	    var arrays = [];
	    while (num > 0) {
	        arrays = arrays.concat(nestedCopy(array.slice()));
	        num--;
	    }
	    return arrays.slice();
	};
	
	function shuffle(array) {
	    array = array.slice();
	    let counter = array.length;
	    while (counter > 0) {
	        let index = Math.floor(Math.random() * counter);
	        counter--;
	        let temp = array[counter];
	        array[counter] = array[index];
	        array[index] = temp;
	    }
	    return array;
	};
	
	function getRandomInt(min, max) {
	    min = Math.ceil(min);
	    max = Math.floor(max);
	    return Math.floor(Math.random() * (max - min + 1)) + min;
	};
	
	// Experiment related functions
	function randomise_TD(TD_pattern, nr_trials) {
	    let TD_list = repeat(TD_pattern, Math.ceil(nr_trials / TD_pattern.length));
	    TD_list = shuffle(TD_list);
	    return TD_list;
	}
	
	function randomise_HPL(TD_pattern, nr_trials, HPL) {
	    // 75%
	    let TD_HPL_pattern = repeat(TD_pattern.slice(), 4);
	    for (let i = 0; i < TD_HPL_pattern.length*1/2; i++) {
	        if (TD_HPL_pattern[i][0]===HPL){
	            let tmp = TD_HPL_pattern[i][0];
	            TD_HPL_pattern[i][0] = TD_HPL_pattern[i][1];
	            TD_HPL_pattern[i][1] = tmp;
	        }
	    }
	    let TD_list = repeat(TD_HPL_pattern.slice(), nr_trials / (TD_pattern.length*4));
	    TD_list = shuffle(TD_list);
	    return TD_list;
	}
	
	vars.ind_trial = 0;
	vars.TD_list = [];
	// Set up the target/distractor rate
	if (vars.practice==='yes'){
	    console.log('parctice');
	    vars.period = 'practice';
	    vars.phase = 'practice';
	    vars.nr_trials = vars.nr_trials_practice;
	    vars.TD_list = randomise_TD(vars.TD_pattern, vars.nr_trials);
	} else if (vars.practice==='no'){
	    vars.ind_block++;
	    vars.period = 'test';
	    vars.nr_trials = vars.nr_trials_formal;
	    if (vars.ind_block<2){
	        vars.phase = 'neutral';
	        vars.HPL = -1;
	        vars.TD_list = randomise_TD(vars.TD_pattern, vars.nr_trials);
	        console.log(vars.TD_list);
	    } else if (vars.ind_block>=2 & vars.ind_block<4){
	        vars.phase = 'firstHP';
	        vars.HPL = vars.HPL1;
	        vars.TD_list = randomise_HPL(vars.TD_pattern, vars.nr_trials, vars.HPL);
	        console.log(vars.TD_list);
	    } else if (vars.ind_block>=4 & vars.ind_block<6){
	        vars.phase = 'secondHP';
	        vars.HPL = vars.HPL2;
	        vars.TD_list = randomise_HPL(vars.TD_pattern, vars.nr_trials, vars.HPL);
	        console.log(vars.TD_list);
	    }
	    console.log('formal experiment');
	}
	
	if (vars.practice==='yes'){
	    vars.block_display = 'a practice block'
	} else if (vars.practice==='no'){
	    vars.block_display = 'block ' + (vars.ind_block+1) + '/' + vars.nr_block;
	}
	
	vars.sum_rt = 0;
	vars.durs_fix = [];
	
	for (let i = 0; i < vars.nr_trials; i++) {
	    vars.durs_fix.push(getRandomInt(vars.dur_fix_range[0], vars.dur_fix_range[1]));
	}
	__end__

define inline_javascript set_parameters
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	vars.period = 'awareness';
	vars.ind_block = '99';
	vars.ind_trial = 0;
	vars.corr_resp = 'None';
	vars.response_kb = 'None';
	vars.response_time_kb = 'None';
	vars.correct_kb = 'None';
	vars.num_trials = 1;
	vars.corr_resp = vars.HPL+1;
	__end__

define inline_javascript set_trial
	set description "Executes JavaScript code"
	set _run ""
	___prepare__
	function sample(array) {
	    var randomElement = array[Math.floor(Math.random() * array.length)];
	    return randomElement;
	}
	
	vars.dur_fix = vars.durs_fix[vars.ind_trial];
	
	vars.loc_target = vars.TD_list[vars.ind_trial][0];
	vars.loc_distractor = vars.TD_list[vars.ind_trial][1];
	
	vars.loc_t_x = vars.locations[vars.loc_target][0];
	vars.loc_t_y = vars.locations[vars.loc_target][1];
	vars.loc_d_x = vars.locations[vars.loc_distractor][0];
	vars.loc_d_y = vars.locations[vars.loc_distractor][1];
	
	vars.ori_t = sample([135, 45]);
	if (vars.ori_t===135){
	    vars.correct_response_kb = 'left';
	} else if (vars.ori_t===45){
	    vars.correct_response_kb = 'right';
	} else {
	    console.log('No correct response, the vaule of this variable is ' + vars.correct_response);
	}
	vars.ori_d = sample([90, 0]);
	__end__

define form_multiple_choice sex_collect
	set timeout infinite
	set spacing 10
	__question__
	What sex were you assigned at birth, such as on an original birth certificate?
	
	You can click the following answers by mouse.
	__end__
	__options__
	Male
	Female
	__end__
	set margins "50;50;50;50"
	set form_var answer_sex
	set form_title "What is your sex?"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_javascript sona_setup
	set description "Executes JavaScript code"
	___run__
	if (window.jatos && jatos.urlQueryParameters.SONA_ID) {
	    console.log('Sona information is available');
	    vars.sub_id = jatos.urlQueryParameters.SONA_ID;
	} else {
	    console.log('Sona information is not available (setting value to time index)');
	    vars.sub_id = new Date().getTime();
	}
	
	
	if (window.jatos && jatos.urlQueryParameters.PROLIFIC_PID) {
	    console.log('Prolific information is available')
	    vars.sub_id = jatos.urlQueryParameters.PROLIFIC_PID;
	} else {
	    console.log('Prolific information is not available (setting values to time index)')
	    vars.sub_id = new Date().getTime();
	}
	console.log('sub_id = ' + vars.sub_id)
	
	
	vars.debug_mode = 0; // Set 1
	__end__
	set _prepare ""

define sketchpad start_practice
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="NOTICE!<br /><br />-- We will start a practice first before we go to the formal experiment --<br /><br />-- If you are sure you have understanded your task --<br />-- Then press 'Y' to continue --<br /><br />-- Or you can press 'R' to read the instruction again --" x=0 y=-32 z_index=0

define sketchpad stim_board
	set duration "[dur_disp]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient="[ori_t]" phase=0 show_if=always size="[gabor_size]" stdev=18 x="[loc_t_x]" y="[loc_t_y]" z_index=0
	draw gabor bgmode=col2 color1="#ffffff" color2="#000000" env=gaussian freq=0.1 orient="[ori_d]" phase=0 show_if=always size="[gabor_size]" stdev=18 x="[loc_d_x]" y="[loc_d_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_0_x]" y="[loc_0_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_1_x]" y="[loc_1_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_2_x]" y="[loc_2_y]" z_index=0
	draw circle color=white fill=0 penwidth=1 r="[circle_radius]" show_if=always x="[loc_3_x]" y="[loc_3_y]" z_index=0

define sketchpad thank_you_message
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please put aside all distractions (e.g., tv, audio, your phone,etc) <br /> and focus on the experiment..<br /><br />You will need to use the left (←) and right (→) arrows <br />during the experiment. Find them on your keyboard.<br /><br />Please read through the following instructions carefully,<br /> as going back to a previous slide is not possible!<br /><br />The next few images will explain the experimental task.<br /><br />Maximize the size of your browser such that it fills the whole screen.<br />If you find some of the sentences do not show <br />within the screen, please zoom in/out your browser <br />so that you can read all the instruction clearly.<br /><br />-- Press any key to continue --<br /><br /><br /><br /><br />" x=0 y=128 z_index=0
	draw image center=1 file="left_right_arrow.png" scale=0.20000000000000015 show_if=always x=0 y=-224 z_index=0

define sketchpad time_count_1
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text=1 x=0 y=0 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad time_count_2
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text=2 x=0 y=0 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad time_count_3
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text=3 x=0 y=0 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad time_count_go
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="GO!" x=0 y=0 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad time_count_ready
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=128 html=yes show_if=always text="READY?" x=0 y=0 z_index=0
	draw image center=1 file="fixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_javascript trial_counter
	set description "Executes JavaScript code"
	set _run "vars.ind_trial++"
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run set_trial always
	run time_count_ready "[ind_trial] == 0"
	run time_count_3 "[ind_trial] == 0"
	run time_count_2 "[ind_trial] == 0"
	run time_count_1 "[ind_trial] == 0"
	run time_count_go "[ind_trial] == 0"
	run fixation always
	run placeholder always
	run stim_board always
	run resp always
	run kb always
	run feedback_script always
	run fixation_feedback always
	run logger always
	run trial_counter always

define sequence waiting_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run display_wait always
	run continue always

define loop waiting_to_start
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run waiting_sequence

